<?xml version='1.0' encoding='UTF-8'?>
<model name="RhoH" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="uM">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="per_s">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="uM_per_s">
        <unit units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="per_uM_per_s">
        <unit exponent="-1" units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="environment">
        <variable name="t" public_interface="out" units="s"/>
    </component>
    <component name="RhoH">
        <variable name="t" public_interface="in" units="s"/>
        <variable name="J1" public_interface="out" units="uM_per_s"/>
        <variable name="J2" units="uM_per_s"/>
        <variable name="J3" units="uM_per_s"/>
        <variable name="J4" units="uM_per_s"/>
        <variable name="J5" public_interface="out" units="uM_per_s"/>
        <variable name="J6" units="uM_per_s"/>
        <variable name="J7" public_interface="out" units="uM_per_s"/>
        <variable initial_value="0" name="Lck" units="uM"/>
        <variable initial_value="10" name="RhoH" units="uM"/>
        <!--10-->
        <variable initial_value="0" name="pRhoH" units="uM"/>
        <variable initial_value="0.005" name="Zap70" units="uM"/>
        <variable initial_value="0" name="pZap70" units="uM"/>
        <variable initial_value="0" name="pLat" public_interface="out" units="uM"/>
        <variable initial_value="0" name="pRhoHLck" units="uM"/>
        <variable initial_value="0" name="pRhoHZap70" units="uM"/>
        <variable initial_value="0" name="pZap70Lat" units="uM"/>
        <variable initial_value="0.4027" name="Pi" public_interface="out" units="uM"/>
        <variable initial_value="6.47" name="Lat" units="uM"/>
        <variable initial_value="6.5" name="pLck" units="uM"/>
        <variable name="k_f1" public_interface="in" units="per_uM_per_s"/>
        <variable name="k_r1" public_interface="in" units="per_s"/>
        <variable initial_value="0.00817889" name="k_f2" public_interface="out" units="per_s"/>
        <variable initial_value="0.0035" name="k_f3" public_interface="out" units="per_uM_per_s"/>
        <variable initial_value="10.5797" name="k_f4" public_interface="out" units="per_uM_per_s"/>
        <variable name="k_r4" public_interface="in" units="per_s"/>
        <variable name="k_f5" public_interface="in" units="per_s"/>
        <variable initial_value="0.4143" name="k_f6" public_interface="out" units="per_uM_per_s"/>
        <variable name="k_r6" public_interface="in" units="per_s"/>
        <variable initial_value="11.4185" name="k_f7" public_interface="out" units="per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J1</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f1</ci>
                        <ci>RhoH</ci>
                        <ci>pLck</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r1</ci>
                        <ci>pRhoHLck</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J2</ci>
                <apply>
                    <times/>
                    <ci>k_f2</ci>
                    <ci>pRhoHLck</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J3</ci>
                <apply>
                    <times/>
                    <ci>k_f3</ci>
                    <ci>Pi</ci>
                    <ci>Lck</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J4</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f4</ci>
                        <ci>pRhoH</ci>
                        <ci>Zap70</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r4</ci>
                        <ci>pRhoHZap70</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J5</ci>
                <apply>
                    <times/>
                    <ci>k_f5</ci>
                    <ci>pRhoHZap70</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J6</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f6</ci>
                        <ci>pZap70</ci>
                        <ci>Lat</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r6</ci>
                        <ci>pZap70Lat</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J7</ci>
                <apply>
                    <times/>
                    <ci>k_f7</ci>
                    <ci>pZap70Lat</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>RhoH</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J1</ci>
                    </apply>
                    <ci>J5</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pRhoH</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J2</ci>
                    <ci>J4</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Zap70</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J4</ci>
                    </apply>
                    <ci>J7</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pZap70</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J5</ci>
                    <ci>J6</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Lck</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J2</ci>
                    <ci>J3</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pLck</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J1</ci>
                    </apply>
                    <ci>J3</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pRhoHLck</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                    <ci>J2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pRhoHZap70</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J4</ci>
                    <ci>J5</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pZap70Lat</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J6</ci>
                    <ci>J7</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Lat</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J6</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pLat</ci>
                </apply>
                <ci>J7</ci>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="environment" component_2="RhoH"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
</model>
